CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:BS_Ori
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:BS_Ori
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:OrigRed
    Convert green to gray?:Yes
    Name the output image:OrigGreen
    Convert blue to gray?:Yes
    Name the output image:OrigBlue
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
ImageMath:[module_num:6|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Blue_minus_Green
    Image or measurement?:Image
    Select the first image:OrigBlue
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:OrigGreen
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Blue_minus_Green
    Name the primary objects to be identified:Blood_Cells_Intensity_Parse
    Typical diameter of objects, in pixel units (Min,Max):40,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
ExportToDatabase:[module_num:8|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:Image_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:BloodCellObjects.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:BloodScreen_
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    Export object relationships?:Yes
    Overwrite without warning?:Data only
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    Create a CellProfiler Analyst workspace file?:No
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